def model ICC as
  def unit conductance_units as
    unit siemens {pref: nano};
  enddef;
  def unit millifarads as
    unit farad {pref: milli};
  enddef;
  def unit voltage_units as
    unit volt {pref: milli};
  enddef;
  def unit volume_units as
    unit litre;
  enddef;
  def unit Inverse_Voltage as
    unit voltage_units {expo: -1};
  enddef;
  def unit Inverse_Voltage_per_time_units as
    unit Inverse_Voltage;
    unit time_units {expo: -1};
  enddef;
  def unit time_units as
    unit second;
  enddef;
  def unit current_units as
    unit voltage_units;
    unit conductance_units;
  enddef;
  def unit rate_constants_units as
    unit time_units {expo: -1};
  enddef;
  def unit capacitance_units as
    unit farad {pref: nano};
  enddef;
  def unit Temperature_units as
    unit kelvin;
  enddef;
  def unit Inverse_Temperature_units_times_conductance as
    unit Temperature_units {expo: -1};
    unit conductance_units;
  enddef;
  def unit F_units as
    unit mole {expo: -1, pref: nano};
    unit coulomb {pref: micro};
  enddef;
  def unit R_units as
    unit joule {pref: nano};
    unit mole {expo: -1, pref: nano};
    unit kelvin {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit per_micromolar as
    unit litre;
    unit mole {expo: -1, pref: micro};
  enddef;
  def unit per_millimolar as
    unit litre;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit millimolar_per_second as
    unit mole {pref: milli};
    unit litre {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_micromolarsecond as
    unit mole {expo: -1, pref: micro};
    unit litre {expo: 1};
    unit second {expo: -1};
  enddef;
  def unit micromolar_per_second as
    unit mole {pref: micro};
    unit litre {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_second_per_millivolt as
    unit mole {pref: milli};
    unit litre {expo: -1};
    unit second {expo: -1};
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit millimole_to_nanomole as
    unit mole {pref: nano};
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit microcoulomb_to_picocoulomb as
    unit coulomb {pref: pico};
    unit coulomb {expo: -1, pref: micro};
  enddef;
  def unit micrometer as
    unit meter {pref: micro};
  enddef;
  def unit micrometer2_per_time as
    unit meter {expo: 2, pref: micro};
    unit second {expo: -1};
  enddef;

  def comp Time as
    var time: time_units {priv: out, pub: out};
  enddef;

  def comp Parameters as
    var p2m: dimensionless {init: 1e-9, pub: out};
    var umc2L: dimensionless {init: 1e15, pub: out};
    var T: Temperature_units {init: 310, pub: out};
    var F: F_units {init: 96.4846, pub: out};
    var R: R_units {init: 8.3144, pub: out};
    var z_ca: dimensionless {init: 2, pub: out};
    var z_na: dimensionless {init: 1, pub: out};
    var z_k: dimensionless {init: 1, pub: out};
    var z_cl: dimensionless {init: -1, pub: out};
    var Ca_o: micromolar {init: 2000, pub: out};
    var Cl_i: micromolar {init: 78000, pub: out};
    var Cl_o: micromolar {init: 166e3, pub: out};
    var K_i: micromolar {init: 140e3, pub: out};
    var K_o: micromolar {init: 5e3, pub: out};
    var Na_i: micromolar {init: 30e3, pub: out};
    var Na_o: micromolar {init: 140e3, pub: out};
  enddef;

  def comp Volume as
    var cellVol: litre {init: 1.0e-12};
    var cellPropER: dimensionless {init: 0.1};
    var cellPropCyto: dimensionless {init: 0.7};
    var volER: litre {pub: out};
    var volCyto: litre {pub: out};
    volER = cellVol*cellPropER;
    volCyto = cellVol*cellPropCyto;
  enddef;

  def comp Nernst as
    var T: Temperature_units {pub: in};
    var F: F_units {pub: in};
    var R: R_units {pub: in};
    var z_na: dimensionless {pub: in};
    var z_k: dimensionless {pub: in};
    var z_cl: dimensionless {pub: in};
    var z_ca: dimensionless {pub: in};
    var Cl_i: micromolar {pub: in};
    var Cl_o: micromolar {pub: in};
    var K_i: micromolar {pub: in};
    var K_o: micromolar {pub: in};
    var Na_i: micromolar {pub: in};
    var Na_o: micromolar {pub: in};
    var Ca_i: micromolar {pub: in};
    var Ca_o: micromolar {pub: in};
    var E_NSCC: voltage_units {init: 0, pub: out};
    var E_NSV: voltage_units {init: 0, pub: out};
    var E_SOC: voltage_units {init: 0, pub: out};
    var E_Ca: voltage_units {pub: out};
    var E_Cl: voltage_units {pub: out};
    var E_Na: voltage_units {pub: out};
    var E_K: voltage_units {pub: out};
    // E_Cl = R*T/(F*z_cl)*ln(Cl_o/Cl_i);
    E_Ca = R*T/(F*z_ca)*ln(Ca_o/Ca_i);
    E_Na = R*T/(F*z_na)*ln(Na_o/Na_i);
    E_K = R*T/(F*z_k)*ln(K_o/K_i);
    E_Cl = 0{dimensionless};
  enddef;

  def comp d_Ano1 as
    var Vm: voltage_units {pub: in};
    var time: time_units {pub: in};
    var volCyto: litre {pub: in};
    var J_SOC: micromolar_per_second {pub: in};
    var Dc: micrometer2_per_time {init: 250};
    var Dm: micrometer2_per_time {init: 75};
    var Bm: micromolar {init: 50};
    var Km: micromolar {init: 1};
    var kc: Inverse_Voltage {init: 0.01248, pub: out};
    var nSOC: dimensionless {init: 50, pub: out};
    var Ca_i: micromolar {pub: in};
    // var Ca: micromolar {pub: out};
    var rad: micrometer;
    var mouthCa: micromolar_per_second;
    var localCa: micromolar;
    var d_Ano1_tau: time_units;
    var d_Ano1_tscale: dimensionless {init: 1};
    var colocalRadius: micrometer {init: 0.05};
    var d_Ano1_inf: dimensionless;
    var d_Ano1: dimensionless {init: 0.01, pub: out};
    var Ano1_n: dimensionless {init: 2};
    var Ano1_Vh: voltage_units {init: -100};
    var Ano1_s: voltage_units {init: 0.0156};
    var localCa_clamp: micromolar {init: 1};
    var localCa_bl: micromolar {init: 0};
    var localCa_init: micromolar {init: 0};
    rad = colocalRadius;
    mouthCa = 1e15{dimensionless}*J_SOC*volCyto/nSOC;
    localCa = sel
      case time <= 1{time_units}:
        localCa_init;
      case (time > 1{time_units}) and (time < 9{time_units}):
        localCa_clamp;
      otherwise:
        localCa_bl;
    endsel;
    d_Ano1_tau = d_Ano1_tscale*(81.63{time_units}*exp(-0.57{per_micromolar}*localCa)+76.17{time_units}*exp(-0.05374{time_units}*localCa)*exp(Vm/(70.3{Inverse_Voltage}*exp(0.153{per_micromolar}*localCa))))*1e-3{dimensionless};
    d_Ano1_inf = 1{dimensionless}/((1{dimensionless}+exp((Ano1_Vh-Vm)*Ano1_s))*(1{dimensionless}+pow(localCa/(1.3{micromolar}*exp(-kc*Vm)), -Ano1_n)));
    ode(d_Ano1, time) = (d_Ano1_inf-d_Ano1)/d_Ano1_tau;
  enddef;

  def comp I_Ano1 as
    var g_Ano1: conductance_units {init: 0.5};
    var Vm: voltage_units {priv: out, pub: in};
    var time: time_units {priv: out, pub: in};
    var J_SOC: micromolar_per_second {priv: out, pub: in};
    var Ca_i: micromolar {priv: out, pub: in};
    var volCyto: litre {priv: out, pub: in};
    var E_Cl: voltage_units {pub: in};
    var I_Ano1: current_units {pub: out};
    var d_Ano1: dimensionless {priv: in, pub: out};
    I_Ano1 = g_Ano1*d_Ano1*(Vm-E_Cl);
  enddef;

  def comp d_CaT as
    var Vm: voltage_units {pub: in};
    var time: time_units {pub: in};
    var d_CaT_Vh: voltage_units {init: -26};
    var d_CaT_S: voltage_units {init: -6};
    var d_CaT_tau: time_units {init: 0.006};
    var d_CaT_inf: dimensionless;
    var d_CaT: dimensionless {init: 0.001271016263081, pub: out};
    d_CaT_inf = 1{dimensionless}/(1{dimensionless}+exp((Vm-d_CaT_Vh)/d_CaT_S));
    ode(d_CaT, time) = (d_CaT_inf-d_CaT)/d_CaT_tau;
  enddef;

  def comp f_CaT as
    var Vm: voltage_units {pub: in};
    var time: time_units {pub: in};
    var f_CaT_Vh: voltage_units {init: -66};
    var f_CaT_S: voltage_units {init: 6};
    var f_CaT_tau: time_units {init: 0.04};
    var f_CaT_inf: dimensionless;
    var f_CaT: dimensionless {init: 0.5, pub: out};
    f_CaT_inf = 1{dimensionless}/(1{dimensionless}+exp((Vm-f_CaT_Vh)/f_CaT_S));
    ode(f_CaT, time) = (f_CaT_inf-f_CaT)/f_CaT_tau;
  enddef;
  // Calculate ion currents CaT for H(NaV,NSV,CaV)

  def comp I_CaT as
    var g_CaT: conductance_units {init: 0};
    var time: time_units {priv: out, pub: in};
    var Vm: voltage_units {priv: out, pub: in};
    var p2m: dimensionless {pub: in};
    var F: F_units {pub: in};
    var z_ca: dimensionless {pub: in};
    var E_Ca: voltage_units {pub: in};
    var volCyto: litre {pub: in};
    var f_CaT: dimensionless {priv: in, pub: out};
    var d_CaT: dimensionless {priv: in, pub: out};
    var I_CaT: current_units {pub: out};
    var J_CaT: micromolar_per_second {pub: out};
    I_CaT = g_CaT*d_CaT*f_CaT*(Vm-E_Ca);
    J_CaT = -p2m*I_CaT/(z_ca*F*volCyto);
  enddef;

  def comp d_CaV as
    var Vm: voltage_units {pub: in};
    var time: time_units {pub: in};
    var d_CaV_Vh: voltage_units {init: -26};
    var d_CaV_S: voltage_units {init: -6};
    var d_CaV_tau: time_units {init: 0.006};
    var d_CaV_inf: dimensionless;
    var d_CaV: dimensionless {init: 0.001271016263081, pub: out};
    d_CaV_inf = 1{dimensionless}/(1{dimensionless}+exp((Vm-d_CaV_Vh)/d_CaV_S));
    ode(d_CaV, time) = (d_CaV_inf-d_CaV)/d_CaV_tau;
  enddef;

  def comp I_CaV as
    var g_CaV: conductance_units {init: 0};
    var time: time_units {priv: out, pub: in};
    var Vm: voltage_units {priv: out, pub: in};
    var p2m: dimensionless {pub: in};
    var F: F_units {pub: in};
    var z_ca: dimensionless {pub: in};
    var E_Ca: voltage_units {pub: in};
    var volCyto: litre {pub: in};
    var d_CaV: dimensionless {priv: in, pub: out};
    var I_CaV: current_units {pub: out};
    var J_CaV: micromolar_per_second {pub: out};
    var volER: litre {pub: in};
    I_CaV = g_CaV*d_CaV*(Vm-E_Ca);
    J_CaV = -p2m*I_CaV/(z_ca*F*volER);
  enddef;

  def comp d_NaV as
    var time: time_units {pub: in};
    var Vm: voltage_units {pub: in};
    var d_NaV_Vh: voltage_units {init: -39};
    var d_NaV_S: voltage_units {init: -5.6};
    var d_NaV_t1: rate_constants_units {init: 50};
    var d_NaV_t2: rate_constants_units {init: 1050};
    var d_NaV_t3: Inverse_Voltage {init: -0.06};
    var d_NaV_t4: voltage_units {init: -20};
    var d_NaV_tau: time_units;
    var d_NaV_inf: dimensionless;
    var d_NaV: dimensionless {init: 0.0006607800216060858, pub: out};
    d_NaV_inf = 1{dimensionless}/(1{dimensionless}+exp((Vm-d_NaV_Vh)/d_NaV_S));
    d_NaV_tau = 1{dimensionless}/(d_NaV_t1+(d_NaV_t2-d_NaV_t1)/(1{dimensionless}+exp(d_NaV_t3*(Vm-d_NaV_t4))));
    ode(d_NaV, time) = (d_NaV_inf-d_NaV)/d_NaV_tau;
  enddef;

  def comp f_NaV as
    var Vm: voltage_units {pub: in};
    var time: time_units {pub: in};
    var f_NaV_Vh: voltage_units {init: -55};
    var f_NaV_S: voltage_units {init: -4.5};
    var f_NaV_tau: time_units {init: 1};
    var f_NaV_inf: dimensionless;
    var f_NaV: dimensionless {init: 1, pub: out};
    f_NaV_inf = 0.53{dimensionless}/(1{dimensionless}+exp((Vm-f_NaV_Vh)/f_NaV_S))+1{dimensionless}-0.53{dimensionless};
    ode(f_NaV, time) = (f_NaV_inf-f_NaV)/f_NaV_tau;
  enddef;

  def comp I_NaV as
    var g_NaV: conductance_units {init: 0};
    var time: time_units {priv: out, pub: in};
    var Vm: voltage_units {priv: out, pub: in};
    var f_NaV: dimensionless {priv: in, pub: out};
    var d_NaV: dimensionless {priv: in, pub: out};
    var I_NaV: current_units {pub: out};
    var E_Na: voltage_units {pub: in};
    I_NaV = g_NaV*d_NaV*(Vm-E_Na);
    // Ion current specific to H(NaV)
    // I_NaV = g_NaV*d_NaV*f_NaV*(Vm-E_Na);
    // Ion current specific to L(NaV)
  enddef;

  def comp P_SOC as
    var SOC_h: micromolar {init: 200, pub: out};
    var Ca_er: micromolar {pub: in};
    var SOC_n: dimensionless {init: 8, pub: out};
    var P_SOC: dimensionless {pub: out};
    P_SOC = 1{dimensionless}/(1{dimensionless}+pow(Ca_er/SOC_h, SOC_n));
  enddef;
  // H(NaV,CaV)

  def comp I_SOC as
    var g_SOC: conductance_units {init: 0.0};
    var Ca_er: micromolar {priv: out, pub: in};
    var p2m: dimensionless {pub: in};
    var F: F_units {pub: in};
    var z_ca: dimensionless {pub: in};
    var E_Ca: voltage_units {pub: in};
    var Vm: voltage_units {priv: out, pub: in};
    var SOCPropCa: dimensionless {init: 1.0, pub: out};
    var volCyto: litre {pub: in};
    var P_SOC: dimensionless {priv: in, pub: out};
    var I_SOC: current_units {pub: out};
    var J_SOC: micromolar_per_second {pub: out};
    I_SOC = g_SOC*P_SOC*(Vm-E_Ca);
    J_SOC = -p2m*SOCPropCa*I_SOC/(z_ca*F*volCyto);
  enddef;

  def comp d_KV as
    var Vm: voltage_units {pub: in};
    var time: time_units {pub: in};
    var d_KV_Vh: voltage_units {init: -20};
    var d_KV_S: voltage_units {init: -4.6};
    var d_KV_tau: time_units {init: 0.003};
    var d_KV: dimensionless {init: 0.01, pub: out};
    var d_KV_inf: dimensionless;
    d_KV_inf = 1{dimensionless}/(1{dimensionless}+exp((Vm-d_KV_Vh)/d_KV_S));
    ode(d_KV, time) = (d_KV_inf-d_KV)/d_KV_tau;
  enddef;

  def comp f_KV as
    var time: time_units {pub: in};
    var Vm: voltage_units {pub: in};
    var f_KV_Vh: voltage_units {init: -45};
    var f_KV_S: voltage_units {init: 4.4};
    var f_KV_a: dimensionless {init: 1};
    var f_KV_tau: time_units {init: 0.045};
    var f_KV_inf: dimensionless;
    var f_KV: dimensionless {init: 1, pub: out};
    f_KV_inf = f_KV_a/(1{dimensionless}+exp((Vm-f_KV_Vh)/f_KV_S))+1{dimensionless}-f_KV_a;
    ode(f_KV, time) = (f_KV_inf-f_KV)/f_KV_tau;
  enddef;
  // KV (kt), L(NaV)

  def comp I_KV as
    var g_KV: conductance_units {init: 0};
    var time: time_units {priv: out, pub: in};
    var Vm: voltage_units {priv: out, pub: in};
    var E_K: voltage_units {pub: in};
    var f_KV: dimensionless {priv: in, pub: out};
    var d_KV: dimensionless {priv: in, pub: out};
    var I_KV: current_units {pub: out};
    I_KV = g_KV*d_KV*f_KV*(Vm-E_K);
  enddef;

  def comp d_NSV as
    var Vm: voltage_units {pub: in};
    var time: time_units {pub: in};
    var d_NSV_Vh: voltage_units {init: -30};
    var d_NSV_S: voltage_units {init: -5};
    var d_NSV_tau: time_units {init: 0.005};
    var d_NSV_inf: dimensionless;
    var d_NSV: dimensionless {init: 0.001271016263081, pub: out};
    d_NSV_inf = 1{dimensionless}/(1{dimensionless}+exp((Vm-d_NSV_Vh)/d_NSV_S));
    ode(d_NSV, time) = (d_NSV_inf-d_NSV)/d_NSV_tau;
  enddef;

  def comp f_NSV as
    var Vm: voltage_units {pub: in};
    var time: time_units {pub: in};
    var f_NSV_Vh: voltage_units {init: -50};
    var f_NSV_S: voltage_units {init: 5};
    var f_NSV_tau: time_units {init: 0.8};
    var f_NSV_inf: dimensionless;
    var f_NSV: dimensionless {init: 0.5, pub: out};
    f_NSV_inf = 0.3{dimensionless}/(1{dimensionless}+exp((Vm-f_NSV_Vh)/f_NSV_S))+1{dimensionless}-0.3{dimensionless};
    ode(f_NSV, time) = (f_NSV_inf-f_NSV)/f_NSV_tau;
  enddef;
  // H(NSV)

  def comp I_NSV as
    var g_NSV: conductance_units {init: 0};
    var time: time_units {priv: out, pub: in};
    var Vm: voltage_units {priv: out, pub: in};
    var E_NSV: voltage_units {pub: in};
    var F: F_units {pub: in};
    var volCyto: litre {pub: in};
    var p2m: dimensionless {pub: in};
    var z_ca: dimensionless {pub: in};
    var f_NSV: dimensionless {priv: in, pub: out};
    var d_NSV: dimensionless {priv: in, pub: out};
    var I_NSV: current_units {pub: out};
    var J_NSV: micromolar_per_second {pub: out};
    I_NSV = g_NSV*d_NSV*f_NSV*(Vm-E_NSV);
    J_NSV = -p2m*I_NSV/(z_ca*F*volCyto);
  enddef;

  def comp I_BK as
    var g_BK: conductance_units {init: 0};
    var Vm: voltage_units {priv: out, pub: in};
    var E_K: voltage_units {pub: in};
    var I_BK: current_units {pub: out};
    I_BK = g_BK*(Vm-E_K);
  enddef;

  def comp d_KERG as
    var Vm: voltage_units {priv: out, pub: in};
    var time: time_units {priv: out, pub: in};
    var d_KERG_Vh: voltage_units {init: -35};
    var d_KERG_S: voltage_units {init: -7.1};
    var d_KERG_ta: rate_constants_units {init: 0.15};
    var d_KERG_tV: voltage_units {init: -60};
    var d_KERG_tS: voltage_units {init: 20};
    var d_KERG_tau: time_units;
    var d_KERG_inf: dimensionless;
    var d_KERG: dimensionless {init: 0.001, pub: out};
    d_KERG_tau = 1{dimensionless}/(1{dimensionless}+1{dimensionless}/(1{dimensionless}+exp(d_KERG_ta*(Vm-d_KERG_tV))));
    d_KERG_inf = 1{dimensionless}/(1{dimensionless}+exp((Vm-d_KERG_Vh)/d_KERG_S));
    ode(d_KERG, time) = (d_KERG_inf-d_KERG)/d_KERG_tau;
  enddef;

  def comp f_KERG as
    var Vm: voltage_units {priv: out, pub: in};
    var time: time_units {priv: out, pub: in};
    var f_KERG_Vh: voltage_units {init: -42};
    var f_KERG_S: voltage_units {init: 4};
    var f_KERG_a: dimensionless {init: 1.0};
    var f_KERG_tau: time_units {init: 0.003};
    var f_KERG_inf: dimensionless;
    var f_KERG: dimensionless {init: 0.001, pub: out};
    f_KERG_inf = f_KERG_a/(1{dimensionless}+exp((Vm-f_KERG_Vh)/f_KERG_S))+1{dimensionless}-f_KERG_a;
    ode(f_KERG, time) = (f_KERG_inf-f_KERG)/f_KERG_tau;
  enddef;
  // L(NaV)

  def comp I_KERG as
    var g_KERG: conductance_units {init: 0.0};
    var Vm: voltage_units {priv: out, pub: in};
    var time: time_units {priv: out, pub: in};
    var f_KERG: dimensionless {priv: in, pub: out};
    var d_KERG: dimensionless {priv: in, pub: out};
    var E_K: voltage_units {pub: in};
    var I_KERG: current_units {pub: out};
    I_KERG = g_KERG*d_KERG*f_KERG*(Vm-E_K);
  enddef;

  def comp I_stim as
    var I_stim: current_units {pub: out};
    var time: time_units {priv: out, pub: in};
    I_stim = sel
      case (time > 100{time_units}) and (time < 900{time_units}):
        0{current_units};
      otherwise:
        0{current_units};
    endsel;
  enddef;

  def comp P_NSCC as
    var Ca_i: micromolar {pub: in};
    var P_NSCC: dimensionless {pub: out};
    var n_NSCC: dimensionless {init: 4};
    var Ca_NSCC: micromolar {init: 1.8};
    P_NSCC = pow(Ca_i, n_NSCC)/(pow(Ca_NSCC, n_NSCC)+pow(Ca_i, n_NSCC));
  enddef;

  def comp I_NSCC as
    var g_NSCC: rate_constants_units {init: 0.0};
    var Ca_i: micromolar {priv: out, pub: in};
    var I_NSCC: current_units {pub: out};
    var P_NSCC: dimensionless {priv: in};
    var Vm: voltage_units {priv: out, pub: in};
    var E_NSCC: voltage_units {pub: in};
    I_NSCC = g_NSCC*P_NSCC*(Vm-E_NSCC);
  enddef;

  def comp J_SERCA as
    var Ke: micromolar {init: 0.0};
    var J_SERCA: micromolar_per_second {pub: out};
    var Ve: micromolar_per_second {init: 80};
    var fc: dimensionless {init: 0.01, pub: out};
    var fe: dimensionless {init: 1, pub: out};
    var Ca_i: micromolar {pub: in};
    J_SERCA = Ve*sqr(Ca_i)/(sqr(Ke)+sqr(Ca_i));
  enddef;

  def comp Ca_er as
    var time: time_units {pub: in};
    var fe: dimensionless {pub: in};
    var volER: litre {pub: in};
    var volCyto: litre {pub: in};
    var Ca_er: micromolar {init: 290, pub: out};
    var J_SERCA: micromolar_per_second {pub: in};
    var J_IPR: micromolar_per_second {pub: in};
    ode(Ca_er, time) = fe*(J_SERCA-J_IPR)*volCyto/volER;
  enddef;

  def comp y_bind as
    var time: time_units {pub: in};
    var Ca_i: micromolar {pub: in};
    var k1: per_micromolarsecond {init: 4000, pub: out};
    var k2: per_micromolarsecond {init: 2.0};
    var k3: per_micromolarsecond {init: 4000};
    var k4: per_micromolarsecond {init: 2.0};
    var k5: per_micromolarsecond {init: 200, pub: out};
    var k_1: rate_constants_units {init: 520};
    var k_2: rate_constants_units {init: 2.10};
    var k_3: rate_constants_units {init: 3772};
    var k_4: rate_constants_units {init: 0.29};
    var k_5: rate_constants_units {init: 16.4};
    var IP3: micromolar {pub: in};
    var K1: micromolar {pub: out};
    var K2: micromolar {pub: out};
    var K3: micromolar {pub: out};
    var K4: micromolar {pub: out};
    var K5: micromolar {pub: out};
    var y: dimensionless {init: 0.4, pub: out};
    var phi1: rate_constants_units;
    var phi2: rate_constants_units;
    K1 = k_1/k1;
    K2 = k_2/k2;
    K3 = k_3/k3;
    K4 = k_4/k4;
    K5 = k_5/k5;
    phi1 = (k_4*K2*K1+k_2*K4*IP3)*Ca_i/(K4*K2*(K1+IP3));
    phi2 = (k_2*IP3+k_4*K3)/(K3+IP3);
    ode(y, time) = phi1*(1{dimensionless}-y)-phi2*y;
  enddef;

  def comp J_IPR as
    var time: time_units {priv: out, pub: in};
    var Ca_i: micromolar {priv: out, pub: in};
    var Ca_er: micromolar {pub: in};
    var kipr: rate_constants_units {init: 7};
    var Pipr: dimensionless;
    var Jer: rate_constants_units {init: 0.01};
    var IP3: micromolar {init: 0.5, priv: out};
    var K1: micromolar {priv: in};
    var K5: micromolar {priv: in};
    var y: dimensionless {priv: in, pub: out};
    var J_SERCA: micromolar_per_second {pub: in};
    var J_IPR: micromolar_per_second {pub: out};
    Pipr = pow(IP3*Ca_i*(1{dimensionless}-y)/((IP3+K1)*(Ca_i+K5)), 3{dimensionless});
    J_IPR = (kipr*Pipr+Jer)*(Ca_er-Ca_i);
  enddef;

  def comp I_NCX as
    var switch_NCX: dimensionless {init: 0.0};
    var z_ca: dimensionless {pub: in};
    var F: F_units {pub: in};
    var volCyto: litre {pub: in};
    var p2m: dimensionless {pub: in};
    var SOCPropCa: dimensionless {pub: in};
    var v_NCX: micromolar_per_second {init: 225};
    var Ca_i: micromolar {pub: in};
    var J_NCX: micromolar_per_second {pub: out};
    var I_NCX: current_units {pub: out};
    J_NCX = switch_NCX*v_NCX*Ca_i/(3.6{dimensionless}+Ca_i);
    I_NCX = switch_NCX*z_ca*F*volCyto/(-p2m)*SOCPropCa*J_NCX;
  enddef;

  def comp J_PMCA as
    var g_PMCA: dimensionless {init: 0.0};
    var Ca_i: micromolar {pub: in};
    var J_PMCA_max: micromolar_per_second {init: 50};
    var K_PMCA: micromolar {init: 0.1};
    var n_PMCA: dimensionless {init: 2};
    var J_PMCA: micromolar_per_second {pub: out};
    J_PMCA = g_PMCA*J_PMCA_max*1{dimensionless}/(1{dimensionless}+pow(K_PMCA/Ca_i, n_PMCA));
  enddef;

  def comp I_BNa as
    var g_BNa: conductance_units {init: 0};
    var Vm: voltage_units {pub: in};
    var E_Na: voltage_units {pub: in};
    var I_BNa: current_units {pub: out};
    I_BNa = g_BNa*(Vm-E_Na);
  enddef;

  def comp ICC_Membrane as
    var Vm: voltage_units {priv: out, pub: out};
    var time: time_units {priv: out, pub: in};
    var Cm: capacitance_units {init: 0.025};
    var fc: dimensionless {priv: in};
    var f_CaT: dimensionless {priv: in};
    var d_CaT: dimensionless {priv: in};
    var I_CaT: current_units {priv: in};
    var J_CaT: micromolar_per_second {priv: in};
    var d_CaV: dimensionless {priv: in};
    var I_CaV: current_units {priv: in};
    var J_CaV: micromolar_per_second {priv: in};
    var f_NaV: dimensionless {priv: in};
    var d_NaV: dimensionless {priv: in};
    var I_NaV: current_units {priv: in};
    var f_NSV: dimensionless {priv: in};
    var d_NSV: dimensionless {priv: in};
    var I_NSV: current_units {priv: in};
    var J_NSV: micromolar_per_second {priv: in};
    var I_NCX: current_units {priv: in};
    var J_NCX: micromolar_per_second {priv: in};
    var f_KERG: dimensionless {priv: in};
    var d_KERG: dimensionless {priv: in};
    var I_KERG: current_units {priv: in};
    var f_KV: dimensionless {priv: in};
    var d_KV: dimensionless {priv: in};
    var I_NSCC: current_units {priv: in};
    var I_stim: current_units {priv: in};
    var I_KV: current_units {priv: in};
    var I_BNa: current_units {priv: in};
    var I_BK: current_units {priv: in};
    var d_Ano1: dimensionless {priv: in};
    var I_Ano1: current_units {priv: in};
    var I_SOC: current_units {priv: in};
    var J_SOC: micromolar_per_second {priv: in};
    var J_IPR: micromolar_per_second {priv: in};
    var J_PMCA: micromolar_per_second {priv: in};
    var J_SERCA: micromolar_per_second {priv: in};
    var Ca_er: micromolar {priv: in};
    var Ca_i: micromolar {init: 0.14, priv: out, pub: out};
    var Iion: current_units {pub: out};
    var V_clamp: voltage_units {init: -100};
    var V_bl: voltage_units {init: -100};
    var V_init: voltage_units {init: 0};
    ode(Ca_i, time) = 0{dimensionless};
    Vm = sel
      case time <= 1{time_units}:
        V_init;
      case (time > 1{time_units}) and (time < 9{time_units}):
        V_clamp;
      otherwise:
        V_bl;
    endsel;
    Iion = 0{dimensionless};
  enddef;
  def map between Parameters and Nernst for
    vars z_ca and z_ca;
    vars z_na and z_na;
    vars z_k and z_k;
    vars z_cl and z_cl;
    vars Cl_i and Cl_i;
    vars Cl_o and Cl_o;
    vars K_i and K_i;
    vars K_o and K_o;
    vars Na_i and Na_i;
    vars Na_o and Na_o;
    vars Ca_o and Ca_o;
    vars T and T;
    vars F and F;
    vars R and R;
  enddef;
  def map between d_CaT and I_CaT for
    vars Vm and Vm;
    vars d_CaT and d_CaT;
    vars time and time;
  enddef;
  def map between f_CaT and I_CaT for
    vars Vm and Vm;
    vars f_CaT and f_CaT;
    vars time and time;
  enddef;
  def map between Volume and I_CaT for
    vars volCyto and volCyto;
  enddef;
  def map between Nernst and I_CaT for
    vars E_Ca and E_Ca;
  enddef;
  def map between Parameters and I_CaT for
    vars p2m and p2m;
    vars z_ca and z_ca;
    vars F and F;
  enddef;
  def map between d_CaV and I_CaV for
    vars Vm and Vm;
    vars d_CaV and d_CaV;
    vars time and time;
  enddef;
  def map between Volume and I_CaV for
    vars volCyto and volCyto;
    vars volER and volER;
  enddef;
  def map between Nernst and I_CaV for
    vars E_Ca and E_Ca;
  enddef;
  def map between Parameters and I_CaV for
    vars p2m and p2m;
    vars z_ca and z_ca;
    vars F and F;
  enddef;
  def map between Parameters and I_NSV for
    vars p2m and p2m;
    vars z_ca and z_ca;
    vars F and F;
  enddef;
  def map between d_NSV and I_NSV for
    vars Vm and Vm;
    vars d_NSV and d_NSV;
    vars time and time;
  enddef;
  def map between f_NSV and I_NSV for
    vars Vm and Vm;
    vars f_NSV and f_NSV;
    vars time and time;
  enddef;
  def map between Volume and I_NSV for
    vars volCyto and volCyto;
  enddef;
  def map between Nernst and I_NSV for
    vars E_NSV and E_NSV;
  enddef;
  def map between d_NaV and I_NaV for
    vars Vm and Vm;
    vars d_NaV and d_NaV;
    vars time and time;
  enddef;
  def map between f_NaV and I_NaV for
    vars Vm and Vm;
    vars f_NaV and f_NaV;
    vars time and time;
  enddef;
  def map between Nernst and I_NaV for
    vars E_Na and E_Na;
  enddef;
  def map between d_KV and I_KV for
    vars Vm and Vm;
    vars d_KV and d_KV;
    vars time and time;
  enddef;
  def map between f_KV and I_KV for
    vars Vm and Vm;
    vars f_KV and f_KV;
    vars time and time;
  enddef;
  def map between Nernst and I_KV for
    vars E_K and E_K;
  enddef;
  def map between d_KERG and I_KERG for
    vars time and time;
    vars Vm and Vm;
    vars d_KERG and d_KERG;
  enddef;
  def map between f_KERG and I_KERG for
    vars time and time;
    vars Vm and Vm;
    vars f_KERG and f_KERG;
  enddef;
  def map between Nernst and I_KERG for
    vars E_K and E_K;
  enddef;
  def map between Volume and I_SOC for
    vars volCyto and volCyto;
  enddef;
  def map between Parameters and I_SOC for
    vars p2m and p2m;
    vars z_ca and z_ca;
    vars F and F;
  enddef;
  def map between P_SOC and I_SOC for
    vars P_SOC and P_SOC;
    vars Ca_er and Ca_er;
  enddef;
  def map between Nernst and I_SOC for
    vars E_Ca and E_Ca;
  enddef;
  def map between Nernst and I_BK for
    vars E_K and E_K;
  enddef;
  def map between Volume and I_NCX for
    vars volCyto and volCyto;
  enddef;
  def map between I_SOC and I_NCX for
    vars SOCPropCa and SOCPropCa;
  enddef;
  def map between Parameters and I_NCX for
    vars p2m and p2m;
    vars z_ca and z_ca;
    vars F and F;
  enddef;
  def map between Nernst and I_BNa for
    vars E_Na and E_Na;
  enddef;
  def map between ICC_Membrane and I_BNa for
    vars Vm and Vm;
    vars I_BNa and I_BNa;
  enddef;
  def map between Ca_er and J_IPR for
    vars Ca_er and Ca_er;
    vars J_IPR and J_IPR;
  enddef;
  def map between J_SERCA and J_IPR for
    vars J_SERCA and J_SERCA;
  enddef;
  def map between Volume and Ca_er for
    vars volCyto and volCyto;
    vars volER and volER;
  enddef;
  def map between I_SOC and Ca_er for
    vars Ca_er and Ca_er;
  enddef;
  def map between Ca_er and J_SERCA for
    vars fe and fe;
    vars J_SERCA and J_SERCA;
  enddef;
  def map between Nernst and I_NSCC for
    vars E_NSCC and E_NSCC;
  enddef;
  def map between I_NSCC and P_NSCC for
    vars P_NSCC and P_NSCC;
    vars Ca_i and Ca_i;
  enddef;
  def map between Volume and I_Ano1 for
    vars volCyto and volCyto;
  enddef;
  def map between I_SOC and I_Ano1 for
    vars J_SOC and J_SOC;
  enddef;
  def map between d_Ano1 and I_Ano1 for
    vars Vm and Vm;
    vars d_Ano1 and d_Ano1;
    vars time and time;
    vars volCyto and volCyto;
    vars J_SOC and J_SOC;
    vars Ca_i and Ca_i;
  enddef;
  def map between Nernst and I_Ano1 for
    vars E_Cl and E_Cl;
  enddef;
  def map between y_bind and J_IPR for
    vars K1 and K1;
    vars K5 and K5;
    vars IP3 and IP3;
    vars y and y;
    vars Ca_i and Ca_i;
    vars time and time;
  enddef;
  def map between I_Ano1 and ICC_Membrane for
    vars time and time;
    vars d_Ano1 and d_Ano1;
    vars I_Ano1 and I_Ano1;
    vars Vm and Vm;
    vars Ca_i and Ca_i;
  enddef;
  def map between I_NSCC and ICC_Membrane for
    vars Vm and Vm;
    vars I_NSCC and I_NSCC;
    vars Ca_i and Ca_i;
  enddef;
  def map between Ca_er and ICC_Membrane for
    vars Ca_er and Ca_er;
    vars time and time;
  enddef;
  def map between J_SERCA and ICC_Membrane for
    vars fc and fc;
    vars Ca_i and Ca_i;
    vars J_SERCA and J_SERCA;
  enddef;
  def map between J_IPR and ICC_Membrane for
    vars J_IPR and J_IPR;
    vars Ca_i and Ca_i;
    vars time and time;
  enddef;
  def map between I_stim and ICC_Membrane for
    vars time and time;
    vars I_stim and I_stim;
  enddef;
  def map between J_PMCA and ICC_Membrane for
    vars J_PMCA and J_PMCA;
    vars Ca_i and Ca_i;
  enddef;
  def map between I_NCX and ICC_Membrane for
    vars Ca_i and Ca_i;
    vars I_NCX and I_NCX;
    vars J_NCX and J_NCX;
  enddef;
  def map between Nernst and ICC_Membrane for
    vars Ca_i and Ca_i;
  enddef;
  def map between I_CaT and ICC_Membrane for
    vars time and time;
    vars d_CaT and d_CaT;
    vars f_CaT and f_CaT;
    vars I_CaT and I_CaT;
    vars Vm and Vm;
    vars J_CaT and J_CaT;
  enddef;
  def map between I_CaV and ICC_Membrane for
    vars time and time;
    vars d_CaV and d_CaV;
    vars I_CaV and I_CaV;
    vars Vm and Vm;
    vars J_CaV and J_CaV;
  enddef;
  def map between I_NaV and ICC_Membrane for
    vars time and time;
    vars d_NaV and d_NaV;
    vars f_NaV and f_NaV;
    vars I_NaV and I_NaV;
    vars Vm and Vm;
  enddef;
  def map between I_KV and ICC_Membrane for
    vars time and time;
    vars d_KV and d_KV;
    vars f_KV and f_KV;
    vars I_KV and I_KV;
    vars Vm and Vm;
  enddef;
  def map between I_NSV and ICC_Membrane for
    vars time and time;
    vars d_NSV and d_NSV;
    vars f_NSV and f_NSV;
    vars I_NSV and I_NSV;
    vars J_NSV and J_NSV;
    vars Vm and Vm;
  enddef;
  def map between I_KERG and ICC_Membrane for
    vars time and time;
    vars I_KERG and I_KERG;
    vars f_KERG and f_KERG;
    vars d_KERG and d_KERG;
    vars Vm and Vm;
  enddef;
  def map between I_SOC and ICC_Membrane for
    vars I_SOC and I_SOC;
    vars Vm and Vm;
    vars J_SOC and J_SOC;
  enddef;
  def map between I_BK and ICC_Membrane for
    vars I_BK and I_BK;
    vars Vm and Vm;
  enddef;
  def map between Time and ICC_Membrane for
    vars time and time;
  enddef;

  def group as encapsulation for
    comp ICC_Membrane incl
      comp I_CaT incl
        comp d_CaT;
        comp f_CaT;
      endcomp;
      comp Parameters;
      comp Volume;
      comp Nernst;
      comp I_BK;
      comp I_BNa;
      comp J_SERCA;
      comp J_PMCA;
      comp I_NCX;
      comp I_stim;
      comp J_IPR incl
        comp y_bind;
      endcomp;
      comp Ca_er;
      comp I_SOC incl
        comp P_SOC;
      endcomp;
      comp I_KERG incl
        comp d_KERG;
        comp f_KERG;
      endcomp;
      comp I_NaV incl
        comp d_NaV;
        comp f_NaV;
      endcomp;
      comp I_CaV incl
        comp d_CaV;
      endcomp;
      comp I_NSV incl
        comp d_NSV;
        comp f_NSV;
      endcomp;
      comp I_KV incl
        comp d_KV;
        comp f_KV;
      endcomp;
      comp I_NSCC incl
        comp P_NSCC;
      endcomp;
      comp I_Ano1 incl
        comp d_Ano1;
      endcomp;
    endcomp;
  enddef;
enddef;
